OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  You can browse each box' documentation by selecting the box and pressing F1
Comment
  Overview

  This scenario can be used as a first
  step to collect some training data. Those
  data will later be used to train a classifier
  for online use.

  When you start this scenario, just wait 40
  seconds before it starts the instruction sequence.

  You will then be presented left / right arrows to
  let you imagine left / right hand movements.
  There will be 20 arrows of each side.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  The Graz Visualization box will send the timeline
  markers directly to Acquisition Server using the
  TCP Tagging plugin. The server will then attach them
  appropriately to the EEG stream.
Comment
  Note: It is always a good idea to
  monitor the signals during an experiment

Graz Motor Imagery BCI Stimulator => #0
  Lua Script = ${Player_ScenarioDirectory}/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Stimulations=#0 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
Acquisition client => #2
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#2.Signal stream -> Channel Selector "1:8" => #3
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Notch Filter"
  Filter Method = Butterworth
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 59
  High Cut-off Frequency (Hz) = 61
  Band Pass Ripple (dB) = 0.5
-> Temporal filter => #5
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input signal=#5, Input stimulations=#0 -> LSL Export (Gipsa)
  Stream name = OpenViBE Stream
  Stream type = EEG
Input stream 1=#2.Experiment information, Input stream 2=#5, Input stream 3=#2.Stimulations -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/motor-imagery-csp-1-acquisition-[$core{date}-$core{time}].ov
  Use compression = false
Input stream 1=#5, Input stream 2=#3, Input stream 3=#2.Stimulations -> Identity => #8
  0xac367a9c = 6
Data=#8.Output stream 1, Stimulations=#8.Output stream 3 -> Signal display "Raw signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Data=#8.Output stream 2, Stimulations=#8.Output stream 3 -> Signal display "Filtered signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
#2.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
